PsychoPy2experiment version="2024.2.2a1"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['session'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_OFF
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_DIAMETER
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = LEFT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = feature_binding
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 1
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Routines
  Routine instruct_review
    RoutineSettingsComponent instruct_review
      saveStartStop = False
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    TextComponent text_instruct_review
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        REVIEW

        In every trial, you will see 3 objects followed by a delay. During the delay, please keep looking at the fixation cross at the center of the screen. Then, a test object appears, and you need to decide whether this object is in the same location.

        If the test object is in the same square as before, press the Green key. If the test object is NOT in the same square as before, press the Red key. Please respond as quickly and accurately as possible.


        Press the green key to start practice trials
    KeyboardComponent key_instruct_review
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_review
      saveStartStop = False
      sound [set every repeat] = resource/instruct_review.wav
      startVal [time (s)] = 0.8
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  Routine trial
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    PolygonComponent background
      fillColor = white
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.15
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    PolygonComponent grid_outer
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 4
      shape = rectangle
      size = (0.6, 0.6)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.1
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    PolygonComponent grid_horizontal
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 4
      shape = rectangle
      size = (0.6, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.1
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    PolygonComponent grid_vertical
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 4
      shape = rectangle
      size = (0.2, 0.6)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.1
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    PolygonComponent grid_center
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 4
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.1
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    ImageComponent image_1
      image [set every repeat] = $image_fn[0]
      interpolate = nearest
      pos [set every repeat] = image_loc[0]
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      image [set every repeat] = $image_fn[1]
      interpolate = nearest
      pos [set every repeat] = image_loc[1]
      startVal [time (s)] = 3.05
      stopVal [duration (s)] = 1.0
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    ImageComponent image_3
      image [set every repeat] = $image_fn[2]
      interpolate = nearest
      pos [set every repeat] = image_loc[2]
      startVal [time (s)] = 4.1
      stopVal [duration (s)] = 1.0
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    TextComponent text_fixation
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 5.15
      stopVal [duration (s)] = 8.0
      text = +
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    PolygonComponent grid_outer_test
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 4
      shape = rectangle
      size = (0.6, 0.6)
      startVal [time (s)] = 13.15
      stopVal [duration (s)] = 4.0
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    PolygonComponent grid_horizontal_test
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 4
      shape = rectangle
      size = (0.6, 0.2)
      startVal [time (s)] = 13.15
      stopVal [duration (s)] = 4.0
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    PolygonComponent grid_vertical_test
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 4
      shape = rectangle
      size = (0.2, 0.6)
      startVal [time (s)] = 13.15
      stopVal [duration (s)] = 4.0
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    PolygonComponent grid_center_test
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 4
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 13.15
      stopVal [duration (s)] = 4.0
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    ImageComponent image_test
      image [set every repeat] = $image_test_fn
      interpolate = nearest
      pos [set every repeat] = image_test_loc
      startVal [time (s)] = 13.15
      stopVal [duration (s)] = 4.0
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    KeyboardComponent key_response_test
      allowedKeys = '1', '2'
      forceEndRoutine = True
      startVal [time (s)] = 13.15
      stopVal [duration (s)] = 4.0
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    CodeComponent adjust_image_size
      Code Type = Py
      Begin Experiment:
        def scale_to_size(image_object, max_size):
            image_object.size *= max_size / max(image_object.size)  # scale to max size
            image_object._requestedSize = None  # reset for next image original size
      Begin Routine:
        box_size = 0.195
        scale_to_size(image_1, box_size)
        scale_to_size(image_2, box_size)
        scale_to_size(image_3, box_size)
        scale_to_size(image_test, box_size)
    CodeComponent trigger_trial
      Code Type = Py
      Begin Routine:
        background_trigger_started = False
        grid_trigger_started = False
        image_1_trigger_started = False
        image_2_trigger_started = False
        image_3_trigger_started = False
        delay_trigger_started = False
        test_trigger_started = False
      Each Frame:
        if background.status == STARTED and not background_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=background_start_code)
            win.callOnFlip(eyetracker.sendMessage, background_start_code)
            background_trigger_started = True

        if grid_outer.status == STARTED and not grid_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=grid_start_code)
            win.callOnFlip(eyetracker.sendMessage, grid_start_code)
            grid_trigger_started = True

        if image_1.status == STARTED and not image_1_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=image_1_start_code)
            win.callOnFlip(eyetracker.sendMessage, image_1_start_code)
            image_1_trigger_started = True

        if image_2.status == STARTED and not image_2_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=image_2_start_code)
            win.callOnFlip(eyetracker.sendMessage, image_2_start_code)
            image_2_trigger_started = True

        if image_3.status == STARTED and not image_3_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=image_3_start_code)
            win.callOnFlip(eyetracker.sendMessage, image_3_start_code)
            image_3_trigger_started = True

        if text_fixation.status == STARTED and not delay_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=delay_start_code)
            win.callOnFlip(eyetracker.sendMessage, delay_start_code)
            delay_trigger_started = True

        if image_test.status == STARTED and not test_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=test_start_code)
            win.callOnFlip(eyetracker.sendMessage, test_start_code)
            test_trigger_started = True
  Routine instruct_1
    RoutineSettingsComponent instruct_1
      saveStartStop = False
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    TextComponent text_instruct_intro_1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS

        In this experiment you will see a grid with 9 squares. 3 objects will appear one at a time at different locations within the grid. You will be asked to look at these objects, then after a short delay you will be tested on how well you can remember them.


        Press any of the white keys to continue
    KeyboardComponent key_instruct_intro_1
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_intro_1
      saveStartStop = False
      sound [set every repeat] = resource/instruct_intro_1.wav
      startVal [time (s)] = 0.8
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  Routine instruct_2
    RoutineSettingsComponent instruct_2
      saveStartStop = False
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    TextComponent text_instruct_intro_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS

        You will see 3 objects appearing one at a time followed by an 8-second delay. You need to remember both the identity of the objects and their locations. During the delay, you need to look at the center of the screen.

        After the delay, you will see a test object in one of the grid squares, and you need to decide whether this object is in the same location. In other words, whether the test object is in the same square as it was during the 3-object sequence before the delay.


        Press any of the white keys to continue
    KeyboardComponent key_instruct_intro_2
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_intro_2
      saveStartStop = False
      sound [set every repeat] = resource/instruct_intro_2.wav
      startVal [time (s)] = 0.8
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  Routine instruct_condition
    RoutineSettingsComponent instruct_condition
      saveStartStop = False
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    CodeComponent set_instruct_content
      Code Type = Py
      Begin Routine:
        if instruct_loop.thisRepN == 0:  # Remember Object Condition
            instruct_condition_text = "Remember Object trial: In this type of trial you need to remember the identity of the objects shown to you.\n"
            instruct_condition_text += "\n"
            instruct_condition_text += "You will see 3 objects appearing one at a time followed by an 8 second delay. "
            instruct_condition_text += "You will then be shown a prompt screen saying 'Remember Object'. "
            instruct_condition_text += "This prompt screen will be followed by a test object in the center of the grid.\n"
            instruct_condition_text += "\n"
            instruct_condition_text += "'Remember Object' tells you that you need to decide whether this test object was one of the 3-object sequence just shown to you.\n"
            instruct_condition_text += "\n\n"
            instruct_condition_text += "Press the spacebar to continue"

            instruct_diagram_filename = "resource/object_trial_diagram.tif"

            instruct_response_text = "Remember Object Trial:\n"
            instruct_response_text += "\n"
            instruct_response_text += "If you recognize the test object, press the 'Y' key to indicate that YES, the test object was in the 3-object sequence.\n"
            instruct_response_text += "\n"
            instruct_response_text += "If you do NOT recognize the test object, press the 'N' key to indicate that NO, the test object was NOT in the 3-object sequence."

        elif instruct_loop.thisRepN == 1:  # Remember Location Condition
            instruct_condition_text = "Remember Location trial: In this type of trial you need to remember the location of the objects shown to you.\n"
            instruct_condition_text += "\n"
            instruct_condition_text += "You will see 3 objects appearing one at a time followed by an 8 second delay. "
            instruct_condition_text += "You will then be shown a prompt screen saying 'Remember Location'. "
            instruct_condition_text += "This prompt screen will be followed by a dot in one of the squares of the grid.\n"
            instruct_condition_text += "\n"
            instruct_condition_text += "'Remember Location' tells you that you need to decide whether this square was previously occupied by any object in the 3-object sequence.\n"
            instruct_condition_text += "\n\n"
            instruct_condition_text += "Press the spacebar to continue"

            instruct_diagram_filename = "resource/location_trial_diagram.tif"

            instruct_response_text = "Remember Location Trial:\n"
            instruct_response_text += "\n"
            instruct_response_text += "If the square indicated by the dot was previously occupied, press the 'Y' key to indicate that YES, one of the objects in the 3-object sequence was in this square.\n"
            instruct_response_text += "\n"
            instruct_response_text += "If the square indicated by the dot was NOT previously occupied, press the 'N' key to indicate that NO, none of the objects in the 3-object sequence were in this square."

        elif instruct_loop.thisRepN == 2:  # Remember Object and Location Condition
            instruct_condition_text = "Remember Object and Location trial: In this type of trial you need to remember both the identity of the objects and their locations.\n"
            instruct_condition_text += "\n"
            instruct_condition_text += "As with the other trials, you will see 3 objects appearing one at a time followed by an 8 second delay. "
            instruct_condition_text += "You will then be shown a prompt screen saying 'Remember Object and Location'. "
            instruct_condition_text += "This prompt screen will be followed by a test object in one of the squares of the grid.\n"
            instruct_condition_text += "\n"
            instruct_condition_text += "'Remember Object and Location' tells you that you need to decide whether this object is in the right location. What right means is that the test object is in the same square as it was in the 3-object sequence.\n"
            instruct_condition_text += "\n\n"
            instruct_condition_text += "Press the spacebar to continue"

            instruct_diagram_filename = "resource/object_location_trial_diagram.tif"

            instruct_response_text = "Remember Object and Location Trial:\n"
            instruct_response_text += "\n"
            instruct_response_text += "If the test object is in the right location, press the 'Y' key to indicate that YES, the test object is in the same square as it was in the 3-object sequence.\n"
            instruct_response_text += "\n"
            instruct_response_text += "If the test object is NOT in the right location, press the 'N' key to indicate that NO, the test object is NOT in the same square as it was in the 3-object sequence."
    TextComponent text_instruct_condition
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_condition_text
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_condition
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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  Routine __start__
    RoutineSettingsComponent __start__
      saveStartStop = False
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    TextComponent text_start
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = We are now ready to begin...
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_start
      saveStartStop = False
      sound [set every repeat] = resource/ready_to_begin.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.8
      syncScreenRefresh = False
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    CodeComponent trigger_table
      Code Type = Py
      Begin Experiment:
        ##TASK ID TRIGGER VALUES##
        # special code 100 (task start, task ID should follow immediately)
        task_start_code = 100
        # special code 106 (task ID for feature binding WM task)
        task_ID_code = 106

        ##GENERAL TRIGGER VALUES##
        # special code 122 (block start)
        block_start_code = 122
        # special code 123 (block end)
        block_end_code = 123

        ##TASK SPECIFIC TRIGGER VALUES##
        # N.B.: only use values 1-99 and provide clear comments on used values
        background_start_code = 9
        grid_start_code = 10
        image_1_start_code = 11
        image_2_start_code = 12
        image_3_start_code = 13
        delay_start_code = 14
        test_start_code = 16
    CodeComponent task_id
      Code Type = Py
      Begin Experiment:
        dev.activate_line(bitmask=task_start_code)  # special code for task start
        core.wait(0.5)  # wait 500ms between two consecutive triggers
        dev.activate_line(bitmask=task_ID_code)  # special code for task ID
    CodeComponent eeg
      Code Type = Py
      Before Experiment:
        import pyxid2
        import threading
        import signal


        def exit_after(s):
            '''
            function decorator to raise KeyboardInterrupt exception
            if function takes longer than s seconds
            '''
            def outer(fn):
                def inner(*args, **kwargs):
                    timer = threading.Timer(s, signal.raise_signal, args=[signal.SIGINT])
                    timer.start()
                    try:
                        result = fn(*args, **kwargs)
                    finally:
                        timer.cancel()
                    return result
                return inner
            return outer


        @exit_after(1)  # exit if function takes longer than 1 seconds
        def _get_xid_devices():
            return pyxid2.get_xid_devices()


        def get_xid_devices():
            print("Getting a list of all attached XID devices...")
            attempt_count = 0
            while attempt_count >= 0:
                attempt_count += 1
                print('     Attempt:', attempt_count)
                attempt_count *= -1  # try to exit the while loop
                try:
                    devices = _get_xid_devices()
                except KeyboardInterrupt:
                    attempt_count *= -1  # get back in the while loop
            return devices


        devices = get_xid_devices()

        if devices:
            dev = devices[0]
            print("Found device:", dev)
            assert dev.device_name == 'Cedrus C-POD', "Incorrect C-POD detected."
            dev.set_pulse_duration(50)  # set pulse duration to 50ms

            # Start EEG recording
            print("Sending trigger code 126 to start EEG recording...")
            dev.activate_line(bitmask=126)  # trigger 126 will start EEG
            print("Waiting 10 seconds for the EEG recording to start...")
            print("")
            core.wait(10)  # wait 10s for the EEG system to start recording

            # Marching lights test
            print("C-POD<->eego 7-bit trigger lines test...")
            for line in range(1, 8):  # raise lines 1-7 one at a time
                print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
                dev.activate_line(lines=line)
                core.wait(0.5)  # wait 500ms between two consecutive triggers
            dev.con.set_digio_lines_to_mask(0)  # XidDevice.clear_all_lines()
            print("EEG system is now ready for the experiment to start.")

        else:
            # Dummy XidDevice for code components to run without C-POD connected
            class dummyXidDevice(object):
                def __init__(self):
                    pass
                def activate_line(self, lines=None, bitmask=None):
                    pass


            print("WARNING: No C-POD connected for this session! "
                  "You must start/stop EEG recording manually!")
            dev = dummyXidDevice()
      End Experiment:
        # Stop EEG recording
        dev.activate_line(bitmask=127)  # trigger 127 will stop EEG
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent condition_setup
      Code Type = Py
      Begin Experiment:
        import glob

        # Set up condition arrays for the experiment
        rng = np.random.default_rng()
        session_str = str(int(expInfo['session']))
        image_filenames = glob.glob('resource/image_sets/' + session_str + '/' + session_str + '_*.jpg')

        conditions = ['same', 'different']
        n_conditions = len(conditions)  # 2 different conditions in total
        n_objects_per_trial = 3  # each trial presents 3 objects in a sequence
        locations = [(-0.2, 0.2), (0, 0.2), (0.2, 0.2),
                     (-0.2, 0),             (0.2, 0),
                     (-0.2, -0.2), (0, -0.2), (0.2, -0.2)]

        # Practice trials
        n_trials_per_condition = 2  # each condition is presented 2 times during practice
        n_trials_practice = n_conditions * n_trials_per_condition  # 4 trials during practice
        n_objects_practice = n_trials_practice * n_objects_per_trial
        # trial types
        trial_type_practice_list = rng.permutation(conditions * n_trials_per_condition)
        # image locations
        image_loc_practice_list = [rng.permutation(locations) for _ in range(n_trials_practice)]
        # image filenames
        image_fn_practice = image_filenames[:n_objects_practice]
        # package the images into nested lists of 3 objects
        image_fn_practice_list = [image_fn_practice[i * n_objects_per_trial:(i + 1) * n_objects_per_trial] for i in range(n_trials_practice)]

        # Main trials
        n_trials_per_condition = 40  # each condition is repeated 40 times
        n_trials = n_conditions * n_trials_per_condition  # 80 trials during main experiment
        n_objects = n_trials * n_objects_per_trial
        # trial types
        trial_type_list = rng.permutation(conditions * n_trials_per_condition)
        # image locations
        image_loc_list = [rng.permutation(locations) for _ in range(n_trials)]
        # image filenames - skipping images already used for practice trials
        image_fn = image_filenames[n_objects_practice:n_objects_practice + n_objects]
        # package the images into nested lists of 3 objects
        image_fn_list = [image_fn[i * n_objects_per_trial:(i + 1) * n_objects_per_trial] for i in range(n_trials)]

        assert len(image_filenames) == 252, "Incorrect number of picture stimuli loaded for this session."
        assert len(image_filenames) / n_objects_per_trial == (n_trials_practice + n_trials), "Incorrect number of trials for this session."
        assert np.all(np.array([len(x) for x in image_fn_list]) == n_objects_per_trial), "Incorrect number of stimuli for some trials."
  Routine trial_setup
    RoutineSettingsComponent trial_setup
      saveStartStop = False
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    CodeComponent setup_image_trial
      Code Type = Py
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      Begin Routine:
        # Obtain trial specific variables
        image_fn = image_fn_list[trials.thisRepN]
        image_loc = image_loc_list[trials.thisRepN]
        trial_type = trial_type_list[trials.thisRepN]

        # Set up filenames, location, etc.
        if trial_type == 'same':
            i = rng.choice([0, 1, 2])  # select one of the three study objects
            image_test_fn = image_fn[i]  # show the selected object
            image_test_loc = image_loc[i]  # and its corresponding location
            correct_resp = '1'

        elif trial_type == 'different':
            index = [0, 1, 2]
            i = rng.choice(index)  # select one of the three study objects
            _ = index.pop(i)  # remove the selected index from the list
            image_test_fn = image_fn[i]  # show the selected object
            image_test_loc = image_loc[rng.choice(index)]  # select from remaining locations
            correct_resp = '2'
      End Routine:
        thisExp.addData('image_fn_1', image_fn[0])  # adding Encoding Image Names to .csv file
        thisExp.addData('image_fn_2', image_fn[1])
        thisExp.addData('image_fn_3', image_fn[2])

        thisExp.addData('image_loc_1', image_loc[0])  # adding Encoding Image Locations to .csv file
        thisExp.addData('image_loc_2', image_loc[1])
        thisExp.addData('image_loc_3', image_loc[2])

        thisExp.addData('trial_type', trial_type)  # adding Trial Type to .csv file

        thisExp.addData('image_test_fn', image_test_fn)  # adding Test Image Name to .csv file
        thisExp.addData('image_test_loc', image_test_loc)  # adding Test Image Name to .csv file
        thisExp.addData('correct_response', correct_resp)  # adding Correct Response to .csv file
  Routine practice_setup
    RoutineSettingsComponent practice_setup
      saveStartStop = False
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    CodeComponent setup_practice_trial
      Code Type = Py
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      Begin Routine:
        # Obtain practice trial specific variables
        image_fn = image_fn_practice_list[practice_trials.thisRepN]
        image_loc = image_loc_practice_list[practice_trials.thisRepN]
        trial_type = trial_type_practice_list[practice_trials.thisRepN]

        # Set up filenames, location, etc.
        if trial_type == 'same':
            i = rng.choice([0, 1, 2])  # select one of the three study objects
            image_test_fn = image_fn[i]  # show the selected object
            image_test_loc = image_loc[i]  # and its corresponding location
            correct_resp = '1'

        elif trial_type == 'different':
            index = [0, 1, 2]
            i = rng.choice(index)  # select one of the three study objects
            _ = index.pop(i)  # remove the selected index from the list
            image_test_fn = image_fn[i]  # show the selected object
            image_test_loc = image_loc[rng.choice(index)]  # select from remaining locations
            correct_resp = '2'
      End Routine:
        thisExp.addData('image_fn_1', image_fn[0])  # adding Encoding Image Names to .csv file
        thisExp.addData('image_fn_2', image_fn[1])
        thisExp.addData('image_fn_3', image_fn[2])

        thisExp.addData('image_loc_1', image_loc[0])  # adding Encoding Image Locations to .csv file
        thisExp.addData('image_loc_2', image_loc[1])
        thisExp.addData('image_loc_3', image_loc[2])

        thisExp.addData('trial_type', trial_type)  # adding Trial Type to .csv file

        thisExp.addData('image_test_fn', image_test_fn)  # adding Test Image Name to .csv file
        thisExp.addData('image_test_loc', image_test_loc)  # adding Test Image Name to .csv file
        thisExp.addData('correct_response', correct_resp)  # adding Correct Response to .csv file
  Routine practice_feedback
    RoutineSettingsComponent practice_feedback
      saveStartStop = False
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    CodeComponent set_feedback_text
      Code Type = Py
      Begin Routine:
        if not key_response_test.keys:  # no key pressed
            feedback_text = 'Respond Faster'
            feedback_text_color = [-1, -1, -1]  # black
        elif key_response_test.keys == correct_resp:
            feedback_text = 'Correct'
            feedback_text_color = [-1, 1, -1]  # green
        else:
            feedback_text = 'Incorrect'
            feedback_text_color = [1, -1, -1]  # red
    PolygonComponent background_feedback
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_feedback
      color [set every repeat] = $feedback_text_color
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = norm
      wrapWidth = 1.8
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      text [set every repeat]:
        $feedback_text
  Routine practice_checkpoint
    RoutineSettingsComponent practice_checkpoint
      saveStartStop = False
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    TextComponent text_checkpoint
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please give us a moment to check whether practice trials need to be repeated...
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_checkpoint
      allowedKeys = 'r', 'o'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_checkpoint
      saveStartStop = False
      sound [set every repeat] = resource/instruct_checkpoint.wav
      startVal [time (s)] = 0.4
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    CodeComponent code_checkpoint
      Code Type = Py
      Begin Routine:
        # End of practice block
        dev.activate_line(bitmask=block_end_code)
        eyetracker.sendMessage(block_end_code)
        # no need to wait 500ms as this routine waits for experimenter key press
      End Routine:
        if key_checkpoint.keys == 'o':  # proceed to main experiment
            practice_loop.finished = True
  Routine instruct_begin
    RoutineSettingsComponent instruct_begin
      saveStartStop = False
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    TextComponent text_instruct_begin
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Great job! We will now begin the experiment.

        As a reminder, try to keep looking at the center of the screen during the delay, and you need to respond to the test objects after the delay.

        Press the Green and Red keys accordingly depending on whether you think the object and its location are the same as shown in the 3-object sequence each time. Please respond as quickly and accurately as possible.

        Note that you will no longer receive feedback on your responses.


        Press the green key to start the trials
    KeyboardComponent key_instruct_begin
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_begin
      saveStartStop = False
      sound [set every repeat] = resource/instruct_begin.wav
      startVal [time (s)] = 0.8
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    CodeComponent trigger_trial_block
      Code Type = Py
      Begin Routine:
        # Beginning of main experiment trial block
        dev.activate_line(bitmask=block_start_code)
        eyetracker.sendMessage(block_start_code)
        # no need to wait 500ms as this routine waits for subject key press
  Routine _welcome
    RoutineSettingsComponent _welcome
      saveStartStop = False
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    TextComponent text_welcome
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome! This task will take approximately 30 minutes.

        Before we explain the task, we need to first calibrate the eyetracking camera. Please sit in a comfortable position with your head on the chin rest. Once we begin, it is important that you stay in the same position throughout this task.

        Please take a moment to adjust the chair height, chin rest, and sitting posture. Make sure that you feel comfortable and can stay still for a while.


        When you are ready, press any of the white keys to begin
    KeyboardComponent key_welcome
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_welcome
      saveStartStop = False
      sound [set every repeat] = resource/welcome.wav
      startVal [time (s)] = 0.8
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  Routine _et_instruct
    RoutineSettingsComponent _et_instruct
      saveStartStop = False
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    TextComponent text_et
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        During the calibration, you will see a target circle moving around the screen. Please try to track it with your eyes.

        Make sure to keep looking at the circle when it stops, and follow it when it moves. It is important that you keep your head on the chin rest once this part begins.


        Press any of the white keys when you are ready, and our team will start the calibration for you
    KeyboardComponent key_et
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_et
      saveStartStop = False
      sound [set every repeat] = resource/eyetrack_calibrate_instruct.wav
      startVal [time (s)] = 0.8
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  Routine _et_mask
    RoutineSettingsComponent _et_mask
      saveStartStop = False
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    TextComponent text_mask
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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  EyetrackerCalibrationRoutine _et_cal
    borderColor = green
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = white
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = black
    innerRadius = 0.005
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.015
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine __end__
    RoutineSettingsComponent __end__
      saveStartStop = False
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    TextComponent text_thank_you
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you. You have completed this task!
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_thank_you
      saveStartStop = False
      sound [set every repeat] = resource/thank_you.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2.7
      syncScreenRefresh = False
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    CodeComponent trigger_trial_block_end
      Code Type = Py
      Begin Routine:
        # End of main experiment trial block
        dev.activate_line(bitmask=block_end_code)
        eyetracker.sendMessage(block_end_code)
        # no need to wait 500ms as this routine lasts 3.0s before experiment ends
  Routine instruct_practice_repeat
    RoutineSettingsComponent instruct_practice_repeat
      saveStartStop = False
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    TextComponent test_practice_repeat
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        We will repeat the practice trials one more time.

        Remember: You need to pay attention to both the identity of the objects and their locations during the 3-object sequence.

        When responding to the test object, press the Green key to indicate that you recognize the object to be in the same location, and press the Red key if you don't.

        Please respond as quickly and accurately as possible.


        Press the green key to start practice trials
    KeyboardComponent key_practice_repeat
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_practice_repeat
      saveStartStop = False
      sound [set every repeat] = resource/instruct_practice_repeat.wav
      startVal [time (s)] = 0.8
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    CodeComponent skip_routine_check
      Code Type = Py
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      Begin Routine:
        # Start a practice block
        dev.activate_line(bitmask=block_start_code)
        eyetracker.sendMessage(block_start_code)
        core.wait(0.5)  # wait 500ms before trial triggers

        # Skip this routine if first time doing practice
        if practice_loop.thisRepN == 0:
            continueRoutine = False
  Routine instruct_3
    RoutineSettingsComponent instruct_3
      saveStartStop = False
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    TextComponent text_response
      letterHeight = 0.08
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        How to Respond to a Test Object:

        If the test object is in the same location, press the Green key to indicate that YES, the test object is in the same square as it was in the 3-object sequence.

        If the test object is NOT in the same location, press the Red key to indicate that NO, the test object is NOT in the same square as it was in the 3-object sequence.
    CodeComponent align_text
      Code Type = Py
      Begin Routine:
        text_response.alignText = 'left'  # align text to the left
    ImageComponent image_diagram
      image = resource/trial_diagram.tiff
      interpolate = nearest
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.142857, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_continue
      color = black
      letterHeight = 0.08
      pos = (0, -0.85)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any of the white keys to continue
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_diagram_condition
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_intro_3
      saveStartStop = False
      sound [set every repeat] = resource/instruct_intro_3.wav
      startVal [time (s)] = 0.8
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Flow
  Routine _welcome
  Routine _et_instruct
  Routine _et_mask
  EyetrackerCalibrationRoutine _et_cal
  Routine __start__
  Routine instruct_1
  Routine instruct_2
  Routine instruct_3
  Routine instruct_review
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 99
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    Routine instruct_practice_repeat
    LoopInitiator practice_trials loopType="TrialHandler"
      loopType = random
      nReps = n_trials_practice
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      Routine practice_setup
      Routine trial
      Routine practice_feedback
    LoopTerminator practice_trials
    Routine practice_checkpoint
  LoopTerminator practice_loop
  Routine instruct_begin
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = n_trials
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    Routine trial_setup
    Routine trial
  LoopTerminator trials
  Routine __end__
